20210317_113725 No log in
Worktable link
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Wash Station Cleaner shallow
2,1;Wash Station Waste
2,2;Wash Station Cleaner deep
3,2;Trough 100ml;Hypochlorite
4,1;Reagent Cooled 8*50ml;Matrix 50 ml falcon tubes
9,1;P084 Trough 100ml SmallTips;CleaningSolution
9,2;Trough 100ml;Matrix 100ml trough
10,1;P084 384well MALDI Plate;MALDI plate
10,3;P084 384-well F-bottom;384-well MTP
16,0;Block 20Pos 1.5 ml Eppendorf;Matrix 1.5 ml Eppendorf tubes
30,6;MTP Waste;Waste
59,0;DM Nunc stronghold;umgreifen
1;System
54;Centrifuge
61;Infinite M200
12;RoboPeel
35;RoboSeal
49;Symbol954
40;TRobot1
47;TRobot2
11;Shelf 32Pos Microplate;DM Nunc stronghold
69;Hotel 4Pos Transfer Grid 69;DM Nunc stronghold
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--{ RPG }--
Variable(int_NumberOfAssayPlates,"4",1,"How many plates would you like to process?",1,1.000000,32.000000,0,2,1,0);
Variable(int_VolumeToAddPerWell,"10",1,"How much volume should be added per well?",1,10.000000,70.000000,0,2,1,0);
Variable(str_LidOption,"Yes",1,"Do your 384-well plates carry lids? [Yes/No]",0,1.000000,10.000000,1,2,1,0);
Variable(int_TotalVolumeMedia,"((int_VolumeToAddPerWell*384*int_NumberOfAssayPlates)+(100*4*8*Int_NumberOfAssayPlates)+5000)/1000",0,"Do your 384-well plates carry lids? [Yes/No]",0,1.000000,10.000000,0,2,0,0);
UserPrompt("Place your Greiner 384-well F-bottom plates in the shelf at the back of the robot. Start filling the shelf from top to bottom and left to right starting at D1 (D1, C1, B1, A1, D2, C2,...).",0,-1);
UserPrompt("Place a 100 ml trough filled with 100ml 2% hypochlorite solution in position R3 (grid 3).",0,-1);
UserPrompt("Place a 100 ml trough filled with at least ~int_TotalVolumeMedia~ ml of your solution to add to the wells in position R6 (grid 9).",0,-1);
Group("Purge liquid system");
Wash(15,2,1,2,2,"20",500,"30",500,10,70,30,1,0,1000,0);
Wash(15,1,1,1,2,"20",500,"30",500,10,70,30,1,0,1000,0);
GroupEnd();
Group("Add hypochlorite to deep wash stations");
Aspirate(15,">> P069 Fill and empty decontamination baths <<	1389","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
Dispense(15,">> P069 Fill and empty decontamination baths <<	1390","950","950","950","950",0,0,0,0,0,0,0,0,2,2,1,"0108?0",0,0);
Aspirate(15,">> P069 Fill and empty decontamination baths <<	1391","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
Dispense(15,">> P069 Fill and empty decontamination baths <<	1392","950","950","950","950",0,0,0,0,0,0,0,0,1,2,1,"0108?0",0,0);
GroupEnd();
Group("Decontaminate tips using hypochlorite");
Aspirate(15,">> P069 Fill and empty decontamination baths <<	1393","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
StartTimer("1");
WaitTimer("1","60");
Dispense(15,"P069 Fill and empty decontamination baths","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
Wash(15,1,1,1,2,"20",500,"20",500,10,70,30,1,0,1000,0);
GroupEnd();
BeginLoop("int_NumberOfAssayPlates","Plates");
IfThen("str_LidOption",1,"Yes");
Transfer_Rack("11","10",0,0,1,1,0,"","DM Nunc stronghold","Narrow","","","Shelf 32Pos Microplate","","MP 2Pos H+P Shake","LOOP_Plates","(Not defined)","4");
Else();
Transfer_Rack("11","10",0,1,1,1,1,"11","DM Nunc stronghold","Narrow","","","Shelf 32Pos Microplate","Shelf 32Pos Microplate","MP 2Pos H+P Shake","LOOP_Plates","LOOP_Plates","4");
EndIf();
ROMA(2,80,75,0,0,0,150,1,1);
ROMA(2,80,75,0,0,0,150,1,0);
Variable(int_VolumeAspiration,"int_VolumeToAddPerWell*12",0,"",0,1.000000,10.000000,0,2,0,0);
BeginLoop("2","DispenseSecondRows");
BeginLoop("2","DispenseUpperLowerHalfPlate");
BeginLoop("2","DispenseLeftRightPlate");
Aspirate(15,"P084 Matrix air multidispense","int_VolumeAspiration","int_VolumeAspiration","int_VolumeAspiration","int_VolumeAspiration",0,0,0,0,0,0,0,0,9,2,1,"0108l0",0,0);
BeginLoop("12","Dispense");
Dispense(15,"P084 Matrix air multidispense","int_VolumeToAddPerWell","int_VolumeToAddPerWell","int_VolumeToAddPerWell","int_VolumeToAddPerWell",0,0,0,0,0,0,0,0,10,3,2,"1810…000000000000000000000000000000000000000000000000000000",4,"Dispense",0,1,"DispenseLeftRightPlate",0,12,"DispenseUpperLowerHalfPlate",1,8,"DispenseSecondRows",1,1,0);
EndLoop();
Group("Decontaminate tips using hypochlorite");
Wash(15,1,1,1,2,"5",500,"5",500,10,70,30,1,0,1000,0);
Aspirate(15,">> P069 Fill and empty decontamination baths <<	1395","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
StartTimer("1");
WaitTimer("1","15");
Dispense(15,"P069 Fill and empty decontamination baths","950","950","950","950",0,0,0,0,0,0,0,0,3,2,1,"0108l0",0,0);
Wash(15,1,1,1,2,"10",500,"15",500,10,70,30,1,0,1000,0);
GroupEnd();
EndLoop();
EndLoop();
EndLoop();
IfThen("str_LidOption",1,"Yes");
Transfer_Rack("10","11",0,0,1,1,0,"","P084 384-well F-bottom","Narrow","","","MP 2Pos H+P Shake","","Shelf 32Pos Microplate","4","(Not defined)","LOOP_Plates");
Else();
Transfer_Rack("10","11",0,1,1,1,0,"11","P084 384-well F-bottom","Narrow","","","MP 2Pos H+P Shake","Shelf 32Pos Microplate","Shelf 32Pos Microplate","4","LOOP_Plates","LOOP_Plates");
EndIf();
EndLoop();
