20210317_113725 No log in
Worktable link
No user logged in
--{ RES }--
V;200
--{ CFG }--
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1,0;Wash Station Cleaner shallow
1,1;Wash Station Waste
1,2;Wash Station Cleaner deep
2,0;Wash Station Cleaner shallow
2,1;Wash Station Waste
2,2;Wash Station Cleaner deep
3,2;Trough 100ml;Hypochlorite
4,1;Reagent Cooled 8*50ml;Matrix 50 ml falcon tubes
9,1;P084 Trough 100ml SmallTips;CleaningSolution
9,2;Trough 100ml;Matrix 100ml trough
10,1;P084 384well MALDI Plate;MALDI plate
10,3;P084 384-well F-bottom;384-well MTP
16,0;Block 20Pos 1.5 ml Eppendorf;Matrix 1.5 ml Eppendorf tubes
30,6;MTP Waste;Waste
59,0;DM Nunc stronghold;umgreifen
1;System
54;Centrifuge
61;Infinite M200
12;RoboPeel
35;RoboSeal
49;Symbol954
40;TRobot1
47;TRobot2
11;Shelf 32Pos Microplate;DM Nunc stronghold
69;Hotel 4Pos Transfer Grid 69;DM Nunc stronghold
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--{ RPG }--
Variable(str_OD600MeasurementStatus,"Running",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(VBScript_DateTime," ",0,"",0,1.000000,10.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\GetDateTime.vbs",0);
Variable(str_OD600FileName,"~VBScript_DateTime~_~LAST_BARCODE~_OD600",0,"",0,1.000000,10.000000,1,2,0,0);
Variable($Infinite M200[1].ID$,"~str_OD600FileName~",0,"",0,1.000000,10.000000,1,2,0,0);
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\ProgramData\Tecan\EVOware\output\Infinite\<ID>.xls|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="localadmin" createdAt="2021-02-17T09:38:23.9787047Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE384ft" plateWithCover="False">
<PlateRange range="A1:P24" auto="false">
<MeasurementAbsorbance mode="Normal" name="ABS">
<Well auto="true">
<MeasurementReading beamDiameter="700" beamGridType="FilledSquare" beamGridSize="2" beamEdgeDistance="1000">
<ReadingLabel name="OD600" scanType="ScanFixed">
<ReadingSettings number="10" rate="25000" />
<ReadingTime integrationTime="0" lagTime="0" readDelay="200000" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Ex" wavelength="6000" bandwidth="90" attenuation="0" usage="ABS" />
</ReadingLabel>
</MeasurementReading>
</Well>
<CustomData />
</MeasurementAbsorbance>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
Variable(VBScript_CopyFileSafe_SourceFilePath,"C:\ProgramData\Tecan\EVOware\output\Infinite\~str_OD600FileName~.xls",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(VBScript_CopyFileSafe_DestinationFolder,"~ExperimentFolder~",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(VBScript_CopyFileSafe_DestinationFileName," ",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(VBScript_CopyFileSafe_SourceFolder," ",0,"",0,1.000000,10.000000,1,2,0,0);
Variable(VBScript_CopyFileSafe_DestinationFilePath," ",0,"",0,1.000000,10.000000,1,2,0,0);
EXECUTE_VBSCRIPT("Z:\VisualBasicScripts\CopyFileSafe.vbs",0);
Variable(str_OD600MeasurementStatus,"Done",0,"",0,1.000000,10.000000,1,2,0,0);
